CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Only suitable for BW/NL/RK-2022/XXX-XXXXX bird photos taken by Gabbi, image crop should be set to (100,400) left/right from edge, (0,2800) top/bottom absolute. Default IdentifyPrimaryObjects minimum threshold of 0.18', '', 'Remember to change metadata rules when switching from XXX-XXXXX to BW/NL/RK or vice versa!']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['Regular bird naming: (?P<Bird>[A-Z]{1,2}-[0-9]{4}-[0-9]{1,3})', 'Alternative bird naming: (?P<Bird>[0-9]{3}-[0-9]{5})']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Bird>[A-Z]{1,2}-[0-9]{4}-[0-9]{1,3})-(?P<Bag>[A-Z]{1,2})_ISO(?P<ISO>[0-9]{3,4})_(?P<conditions>[a-zA-Z0-9-_]{0,20})_?(?P<PhotoID>[X]{1}[0-9]{3})_(?P<Date>[0-9]{4}-[0-9]{2}-[0-9]{2}).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Original
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Original
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGrey
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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
    Select the input image:Original
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
Crop:[module_num:7|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notes:['Standard x,y crop should be set to (100,400) left/right from edge, (0,2800) top/bottom absolute. Suitable for all images except BW-2022-05-PG_ISO200_X007, which requires left/right (100,800) from edge and top/bottom (100,1100) from edge']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
    Select the input image:Original
    Name the output image:CropRGB
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:100,-400
    Top and bottom rectangle positions:100,2800
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    Remove empty rows and columns?:All
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
Crop:[module_num:8|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
    Select the input image:OrigGrey
    Name the output image:CropGrey
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:All
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    Select the image with a cropping mask:CropRGB
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
Crop:[module_num:9|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
    Select the input image:OrigRed
    Name the output image:CropRed
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:All
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    Select the image with a cropping mask:CropRGB
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
Crop:[module_num:10|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
    Select the input image:OrigGreen
    Name the output image:CropGreen
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:All
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    Select the image with a cropping mask:CropRGB
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
Crop:[module_num:11|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
    Select the input image:OrigBlue
    Name the output image:CropBlue
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:All
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    Select the image with a cropping mask:CropRGB
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
IdentifyPrimaryObjects:[module_num:12|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notes:['Original thresholds: global Otsu, two classes, smoothing scale = 1.3488, correction factor=0.5, lower/upper bounds = 0.25/1.0, no log transform']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
    Select the input image:CropGrey
    Name the primary objects to be identified:Fragments
    Typical diameter of objects, in pixel units (Min,Max):20,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.18,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
OverlayObjects:[module_num:13|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
    Input:CropRGB
    Name the output image:OverlayObjects
    Objects:Fragments
    Opacity:0.3

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CropRGB
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cropped
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Bird>-\g<Bag>_ISO\g<ISO>_\g<conditions>_\g<PhotoID>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_fragments
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Bird>-\g<Bag>_ISO\g<ISO>_\g<conditions>_\g<PhotoID>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExpandOrShrinkObjects:[module_num:16|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
    Select the input objects:Fragments
    Name the output objects:ExpandedFragments
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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
SaveCroppedObjects:[module_num:17|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
    Objects:ExpandedFragments
    Directory:Default Output Folder sub-folder|\g<Bird>-\g<Bag>_ISO\g<ISO>_\g<conditions>_\g<PhotoID>/
    Saved file format:8-bit tiff
    Do you want to save cropped images or object masks?:Images
    Image:CropRGB

MeasureObjectSizeShape:[module_num:18|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
    Select object sets to measure:Fragments
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:19|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
    Select images to measure:CropBlue, CropGreen, CropGrey, CropRed
    Select objects to measure:Fragments

ClassifyObjects:[module_num:20|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
    Make classification decision based on:Single measurement
    Hidden:3
    Hidden:1
    Select the object to be classified:Fragments
    Select the measurement to classify by:AreaShape_MajorAxisLength
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object to be classified:Fragments
    Select the measurement to classify by:AreaShape_Compactness
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object to be classified:Fragments
    Select the measurement to classify by:Intensity_IntegratedIntensity_CropGrey
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Elsewhere...|
    Rules or classifier file name:mymodel.model

ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\g<Bird>-\g<Bag>_ISO\g<ISO>_\g<conditions>_\g<PhotoID>/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_Bag,Image|Metadata_Bird,Image|Metadata_ISO,Image|Metadata_conditions,Image|Metadata_PhotoID,Image|FileName_Original,Fragments|Intensity_MeanIntensity_CropGrey,Fragments|Intensity_MeanIntensity_CropGreen,Fragments|Intensity_MeanIntensity_CropBlue,Fragments|Intensity_MeanIntensity_CropRed,Fragments|Intensity_IntegratedIntensity_CropRed,Fragments|Intensity_IntegratedIntensity_CropBlue,Fragments|Intensity_IntegratedIntensity_CropGrey,Fragments|Intensity_IntegratedIntensity_CropGreen,Fragments|Intensity_StdIntensity_CropGreen,Fragments|Intensity_StdIntensity_CropBlue,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Fragments
    Combine these object measurements with those of the previous object?:No
    File name:\g<Bird>-\g<Bag>_ISO\g<ISO>_\g<conditions>_\g<PhotoID>_fragment-data.csv
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Dropbox/NHM Plastics/analysis output test/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_Bird,Image|Metadata_Bag,Image|Metadata_PhotoID,Image|Metadata_conditions,Image|Metadata_Series,Image|Metadata_ISO,Image|Metadata_Frame,Image|Metadata_FileLocation,Image|Count_Fragments,Image|PathName_Original,Image|FileName_Original
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:all_images_fragment-count.csv
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Dropbox/NHM Plastics/analysis output test/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_Bag,Image|Metadata_Bird,Image|Metadata_ISO,Image|Metadata_conditions,Image|Metadata_Frame,Image|Metadata_Series,Image|Metadata_FileLocation,Image|Metadata_PhotoID,Image|PathName_Original,Image|FileName_Original,Fragments|Intensity_MeanIntensity_CropGrey,Fragments|Intensity_MeanIntensity_CropGreen,Fragments|Intensity_MeanIntensity_CropBlue,Fragments|Intensity_MeanIntensity_CropRed,Fragments|Intensity_StdIntensity_CropGreen,Fragments|Intensity_StdIntensity_CropBlue,Fragments|Intensity_StdIntensity_CropRed,Fragments|Intensity_StdIntensity_CropGrey,Fragments|AreaShape_Solidity,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Fragments
    Combine these object measurements with those of the previous object?:No
    File name:all_images_fragment-data.csv
    Use the object name for the file name?:No

DisplayDataOnImage:[module_num:24|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
    Display object or image measurements?:Object
    Select the input objects:Fragments
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:CropRGB
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_fragmentIDs
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Bird>-\g<Bag>_ISO\g<ISO>_\g<conditions>_\g<PhotoID>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
